PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Association Task
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = How are you feeling right now?
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = 'Very Happy', 'Happy', 'Unhappy', 'Sad'
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, )
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  Routine Free_association
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0.8, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Tell me the first thing that comes to your mind when you 'sustainable transportation'. 
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.8, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here to submit 
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = Imagine your dream vacation. What three words or images represent the essence of that dream for you?
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.8, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here to submit 
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      text = Jot down the first three words that come to mind when you think about your future career.
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    TextboxComponent textbox_3
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.8, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here to submit 
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
      text = List three elements or actions that contribute to building a supportive and inclusive community among students.
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    TextboxComponent textbox_4
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.8, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here to submit 
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.5
      text = When you imagine the ideal learning environment, what specific features or elements do you envision?
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    TextboxComponent textbox_5
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.8, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here to submit 
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  Routine Letter_association
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    TextComponent text_l1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Name three things you can find in a kitchen that start with the letter 'M'.
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    TextboxComponent textbox_6
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_6
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.4, 0.2)
      startVal [time (s)] = 0
      text = Submit
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    TextComponent text_l2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Think of three words starting with 'D' that describe your dream vacation destination.
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    TextboxComponent textbox_7
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_7
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here to submit
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    TextComponent text_l3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Associate three words that begin with 'B' and relate them to your favorite hobby or activity.
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    TextboxComponent textbox_8
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_8
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here to submit
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    TextComponent text_l4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Connect three words that begin with 'P' to describe your ideal weekend
    TextboxComponent textbox_9
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_9
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here to submit
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  Routine negative
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    MovieComponent movie_negative
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = C:/Users/Manasvi/Downloads/Negative.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine positive
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    MovieComponent movie_positive
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = C:/Users/Manasvi/Downloads/Positive.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine positive_3
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    MovieComponent Positive
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = C:/Users/Manasvi/Downloads/Positive.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine code
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  Routine freeassociation
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    TextComponent text_f1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $free_asso
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    TextboxComponent textbox_f1
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_11
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = Submit
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  Routine letter
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter_asso
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    TextboxComponent textbox_10
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_10
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = Submit
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Flow
  Routine trial
  Routine positive
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = data/letter.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'letter_asso': "Name three things you can find in a kitchen that start with the letter 'M'."},
      {'letter_asso': "Think of three words starting with 'D' that describe your dream vacation destination."},
      {'letter_asso': "Associate three words that begin with 'B' and relate them to your favorite hobby or activity."},
      {'letter_asso': "Connect three words that begin with 'P' to describe your ideal weekend"},
      {'letter_asso': 'Respond with the first word that comes to mind that starts with that letter.'},
      {'letter_asso': 'Letter: "J"'},
      {'letter_asso': 'Letter: "A"'},
      {'letter_asso': 'Now, think of a word that ends with '},
      {'letter_asso': 'Letter: "N"'},
      {'letter_asso': 'Letter: "V"'},
      {'letter_asso': 'Create a chain of words where each word starts with the last letter of the previous word'},
      {'letter_asso': 'Ice'},
      {'letter_asso': 'Sun'}]
    Routine letter
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/free.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'free_asso': "When you think of 'sustainable transportation', what words or images come to mind?"},
      {'free_asso': 'When imagining an innovative remote workspace, what thoughts or concepts come to mind?'},
      {'free_asso': 'What features or elements do you associate with a sustainable urban park?'},
      {'free_asso': 'What ideas or modifications do you associate with improving accessibility for people with disabilities?'},
      {'free_asso': 'Jot down the first three words that come to mind when you think about your future career.'},
      {'free_asso': 'When you imagine the ideal learning environment, what specific features or elements do you envision?'},
      {'free_asso': 'Write down any activities or habits that you believe can enhance your creativity.'},
      {'free_asso': 'List three elements or actions that contribute to building a supportive and inclusive community among students.'},
      {'free_asso': 'What words or ideas do you associate with the integration of digital technology in education?'},
      {'free_asso': 'Imagine your dream vacation. What three words or images represent the essence of that dream for you?'},
      {'free_asso': None},
      {'free_asso': None},
      {'free_asso': None},
      {'free_asso': None},
      {'free_asso': None},
      {'free_asso': None},
      {'free_asso': None},
      {'free_asso': None}]
    Routine freeassociation
  LoopTerminator trials
